PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1792, 1120]
  color = $[0.804,0.804,0.804]
  expName = OT_FN_even
  logging level = debug
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Routines
  Routine FixCross
    CodeComponent FixCross_Code
      Code Type = Py
      Begin Experiment:
        jitter = np.arange(1, 3, .1)
        shuffle(jitter)
      Begin Routine:
        jitter = np.arange(1, 3, .1)
        shuffle(jitter)
    PolygonComponent FixCross_Image
      fillColor = $[1,1,1]
      lineWidth = 0.5
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter[0]
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
  Routine ActualRunInstr
    TextComponent ActualRunInstr_Text
      color = black
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
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      text:
                     The practice rounds are over.
        You will now begin with the actual experiment.
    TextComponent ActualRunInstr_RespText
      color = black
      letterHeight = 0.05
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = Press the SPACE key for the instructions.
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    KeyboardComponent ActualRun_Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Q1
    TextComponent Q1_ConsText
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        What is the proportion of              faces in the
                                    you just saw?
    TextComponent Q1_ConsText30
      color = black
      letterHeight = 0.05
      pos = (-0.3, 0.172)
      startVal [time (s)] = 0.0
      text = 30 face images
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    TextComponent Q1_ChangeText
      color [set every repeat] = $TextColor
      letterHeight = 0.05
      pos [set every repeat] = Position_Q1
      startVal [time (s)] = 0.0
      text [set every repeat] = $Instruction
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    RatingScaleComponent Q1_Resp
      forceEndRoutine = True
      pos = 0, -0.1
      size = 1.2
      startVal [time (s)] = 0.0
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      customize_everything:
        low=0, high=100,
        precision=0.01,
        labels=('0%','100%'),
        marker='triangle',
        markerColor='black',
        size=1.2,
        scale=None,
        textColor='black',
        pos =(0,0),
        textFont='Calibri Light',
        acceptPreText='Click on the Line',
        acceptText='Submit Response',
        acceptSize=3,
        lineColor='black',
        mouseOnly=True
  Routine Q2
    TextComponent Q2_ConsText
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = What proportion of               faces do you think are in the                              ?
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    TextComponent Q2_ConsText100
      color = black
      letterHeight = 0.05
      pos = (-0.1, 0.174)
      startVal [time (s)] = 0.0
      text = 100 face images
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    TextComponent Q2_ChangeText
      color [set every repeat] = $TextColor
      letterHeight = 0.05
      pos [set every repeat] = Position_Q2
      startVal [time (s)] = 0.0
      text [set every repeat] = $Instruction
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    RatingScaleComponent Q2_Resp
      forceEndRoutine = True
      pos = 0, -0.1
      size = 1.2
      startVal [time (s)] = 0.0
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      customize_everything:
        low=0, high=100,
        precision=0.01,
        labels=('0%','100%'),
        marker='triangle',
        markerColor='black',
        size=1.2,
        scale=None,
        textColor='black',
        pos =(0,0),
        textFont='Calibri Light',
        acceptPreText='Click on the Line',
        acceptText='Submit Response',
        acceptSize=3,
        lineColor='black',
        mouseOnly=True
  Routine Q3
    CodeComponent Q3_Code
      Code Type = Py
      Each Frame:
        if count == 2 or count == 15 or count ==  24:

            count += 1



            """10% probability distribution fearful-block"""



            n = 7     # let n be the initial number of tokens for guarantee

            text_1 = visual.TextStim(win,text = "The computer has randomly selected 1 face image out of the 100 faces.",height = 0.05,font = "Arial", color = 'black',pos = (-0.045,0.35),bold = False)

            text_4 = visual.TextStim(win,text = "If you were to gamble about whether this face is FEARFUL, which option would you prefer?",height = 0.05,font = "Arial", color = 'black',pos = (0,0.2),bold = False)

            text_2 = visual.TextStim(win,text = "Option 1:",height = 0.05, color = 'black',font = "Arial",pos = (-0.4,0),bold = True)

            text_3 = visual.TextStim(win,text = "",height = 0.05, color = 'black',font = "Arial",pos = (-0.4,-0.1),bold = False)

            text_5 = visual.TextStim(win,text = "Option 2:",height = 0.05,font = "Arial", color = 'black',pos = (0.4,0),bold = True)

            text_6 = visual.TextStim(win,text = "A gain of 10 tokens if the face is",height = 0.05, color = 'black',font = "Arial",pos = (0.4,-0.1),bold = False)

            text_7 = visual.TextStim(win,text = "Fearful",height = 0.05, color = 'darkred',font = "Arial",pos = (0.14,-0.15),bold = True)

            text_8 = visual.TextStim(win,text = "or 0 tokens otherwise",height = 0.05, color = 'black',font = "Arial",pos = (0.445,-0.15),bold = False)

            text_0 = visual.TextStim(win,text = "LEFT key = Option 1     RIGHT key = Option 2",height = 0.04,font = "Arial", color = 'black',pos = (0,-0.4),italic = True)

            text_9 = visual.TextStim(win,text = "Your response has been recorded.",height = 0.05,font = "Arial", color = 'black',pos = (0,0))

            text_3.text = "A sure gain of %d tokens" % (n)

            text_1.draw()

            text_2.draw()

            text_3.draw()

            text_4.draw()

            text_5.draw()

            text_6.draw()

            text_7.draw()

            text_8.draw()

            text_0.draw()

            win.flip()

            core.wait(0)

            k_3 = event.waitKeys(keyList = ['left','right']) # 'q' for gurantee and 'p' for gamble



            if k_3[0] == 'left':   # < 70%

                text_1.text = "Now, which option would you select?"

                text_3.text = "A sure gain of %d tokens" % (1)

                text_4.text = ""

                text_1.draw()

                text_2.draw()

                text_3.draw()

                text_4.draw()

                text_5.draw()

                text_6.draw()

                text_7.draw()

                text_8.draw()

                text_0.draw()

                win.flip()

                core.wait(0)

                k_3 = event.waitKeys(keyList = ['left','right'])



                if k_3[0] == 'left':   # <10%

                    text_9.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','5%'+'\n')

                elif k_3[0] == 'right':   # >10%

                    text_3.text = "A sure gain of %d tokens" % (4)

                    text_1.draw()

                    text_2.draw()

                    text_3.draw()

                    text_4.draw()

                    text_5.draw()

                    text_6.draw()

                    text_7.draw()

                    text_8.draw()

                    text_0.draw()

                    win.flip()

                    core.wait(0)

                    k_3 = event.waitKeys(keyList = ['left','right'])



                    if k_3[0] == 'left':         # <40%

                        text_3.text = "A sure gain of %d tokens" % (2)

                        text_1.draw()

                        text_2.draw()

                        text_3.draw()

                        text_4.draw()

                        text_5.draw()

                        text_6.draw()

                        text_7.draw()

                        text_8.draw()

                        text_0.draw()

                        win.flip()

                        core.wait(0)

                        k_3 = event.waitKeys(keyList = ['left','right'])



                        if k_3[0] == 'left':     # <20%

                            text_9.draw()

                            win.flip()

                            core.wait(2)

                            thisExp.addData('Q3_Percentage', '15%'+'\n')

                        elif k_3[0] == 'right':   # >20%

                            text_3.text = "A sure gain of %d tokens" % (3)

                            text_1.draw()

                            text_2.draw()

                            text_3.draw()

                            text_4.draw()

                            text_5.draw()

                            text_6.draw()

                            text_7.draw()

                            text_8.draw()

                            text_0.draw()

                            win.flip()

                            core.wait(0)

                            k_3 = event.waitKeys(keyList = ['left','right'])



                            if k_3[0] == 'left':   # <30%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage', '25%'+'\n')

                            elif k_3[0] == 'right':   # >30%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage', '35%'+'\n')

                    elif k_3[0] == 'right':   # >40%

                        text_3.text = "A sure gain of %d tokens" % (6)

                        text_1.draw()

                        text_2.draw()

                        text_3.draw()

                        text_4.draw()

                        text_5.draw()

                        text_6.draw()

                        text_7.draw()

                        text_8.draw()

                        text_0.draw()

                        win.flip()

                        core.wait(0)

                        k_3 = event.waitKeys(keyList = ['left','right'])



                        if k_3[0] == 'left':         # <60%

                            text_3.text = "A sure gain of %d tokens" % (5)

                            text_1.draw()

                            text_2.draw()

                            text_3.draw()

                            text_4.draw()

                            text_5.draw()

                            text_6.draw()

                            text_7.draw()

                            text_8.draw()

                            text_0.draw()

                            win.flip()

                            core.wait(0)

                            k_3 = event.waitKeys(keyList = ['left','right'])



                            if k_3[0] == 'left':     # <50%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage', '45%'+'\n')

                            elif k_3[0] == 'right':   # >50%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','55%'+'\n')



                        elif k_3[0] == 'right':   # >60%

                            text_9.draw()

                            win.flip()

                            core.wait(2)

                            thisExp.addData('Q3_Percentage','65%'+'\n')



            elif k_3[0] == 'right':        # >70%

                text_3.text = "A sure gain of %d tokens" % (9)

                text_1.text = "Now, which option would you select?"

                text_4.text = ""

                text_1.draw()

                text_2.draw()

                text_3.draw()

                text_4.draw()

                text_5.draw()

                text_6.draw()

                text_7.draw()

                text_8.draw()

                text_0.draw()

                win.flip()

                core.wait(0)

                k_3 = event.waitKeys(keyList = ['left','right'])



                if k_3[0] == 'left':         # <90%

                    text_3.text = "A sure gain of %d tokens" % (8)

                    text_1.draw()

                    text_2.draw()

                    text_3.draw()

                    text_4.draw()

                    text_5.draw()

                    text_6.draw()

                    text_7.draw()

                    text_8.draw()

                    text_0.draw()

                    win.flip()

                    core.wait(0)

                    k_3 = event.waitKeys(keyList = ['left','right'])



                    if k_3[0] == 'left':     # <80%

                        text_9.draw()

                        win.flip()

                        core.wait(2)

                        thisExp.addData('Q3_Percentage','75%'+'\n')

                    elif k_3[0] == 'right':   # >80%

                        text_9.draw()

                        win.flip()

                        core.wait(2)

                        thisExp.addData('Q3_Percentage','85%'+'\n')

                elif k_3[0] == 'right':    # >90%

                    text_9.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','95%'+'\n')

        elif count == 9 or count == 17 or count == 30:

            count += 1



            """10% probability distribution neutral-block"""



            n = 7     # let n be the initial number of tokens for guarantee

            text_1 = visual.TextStim(win,text = "The computer has randomly selected 1 face image out of the 100 faces.",height = 0.05,font = "Arial", color = 'black',pos = (-0.045,0.35),bold = False)

            text_4 = visual.TextStim(win,text = "If you were to gamble about whether this face is NEUTRAL, which option would you prefer?",height = 0.05,font = "Arial", color = 'black',pos = (0,0.2),bold = False)

            text_2 = visual.TextStim(win,text = "Option 1:",height = 0.05, color = 'black',font = "Arial",pos = (-0.4,0),bold = True)

            text_3 = visual.TextStim(win,text = "",height = 0.05, color = 'black',font = "Arial",pos = (-0.4,-0.1),bold = False)

            text_5 = visual.TextStim(win,text = "Option 2:",height = 0.05,font = "Arial", color = 'black',pos = (0.4,0),bold = True)

            text_6 = visual.TextStim(win,text = "A gain of 10 tokens if the face is",height = 0.05, color = 'black',font = "Arial",pos = (0.4,-0.1),bold = False)

            text_7 = visual.TextStim(win,text = "Neutral",height = 0.05, color = 'blue',font = "Arial",pos = (0.14,-0.15),bold = True)

            text_8 = visual.TextStim(win,text = "or 0 tokens otherwise",height = 0.05, color = 'black',font = "Arial",pos = (0.445,-0.15),bold = False)

            text_0 = visual.TextStim(win,text = "LEFT key = Option 1     RIGHT key = Option 2",height = 0.04,font = "Arial", color = 'black',pos = (0,-0.4),italic = True)

            text_9 = visual.TextStim(win,text = "Your response has been recorded.",height = 0.05,font = "Arial", color = 'black',pos = (0,0))

            text_3.text = "A sure gain of %d tokens" % (n)

            text_1.draw()

            text_2.draw()

            text_3.draw()

            text_4.draw()

            text_5.draw()

            text_6.draw()

            text_7.draw()

            text_8.draw()

            text_0.draw()

            win.flip()

            core.wait(0)

            k_3 = event.waitKeys(keyList = ['left','right']) # 'q' for gurantee and 'p' for gamble



            if k_3[0] == 'left':   # < 70%

                text_1.text = "Now, which option would you select?"

                text_3.text = "A sure gain of %d tokens" % (1)

                text_4.text = ""

                text_1.draw()

                text_2.draw()

                text_3.draw()

                text_4.draw()

                text_5.draw()

                text_6.draw()

                text_7.draw()

                text_8.draw()

                text_0.draw()

                win.flip()

                core.wait(0)

                k_3 = event.waitKeys(keyList = ['left','right'])



                if k_3[0] == 'left':   # <10%

                    text_6.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','5%'+'\n')

                elif k_3[0] == 'right':   # >10%

                    text_3.text = "A sure gain of %d tokens" % (4)

                    text_1.draw()

                    text_2.draw()

                    text_3.draw()

                    text_4.draw()

                    text_5.draw()

                    text_6.draw()

                    text_7.draw()

                    text_8.draw()

                    text_0.draw()

                    win.flip()

                    core.wait(0)

                    k_3 = event.waitKeys(keyList = ['left','right'])



                    if k_3[0] == 'left':         # <40%

                        text_3.text = "A sure gain of %d tokens" % (2)

                        text_1.draw()

                        text_2.draw()

                        text_3.draw()

                        text_4.draw()

                        text_5.draw()

                        text_6.draw()

                        text_7.draw()

                        text_8.draw()

                        text_0.draw()

                        win.flip()

                        core.wait(0)

                        k_3 = event.waitKeys(keyList = ['left','right'])



                        if k_3[0] == 'left':     # <20%

                            text_9.draw()

                            win.flip()

                            core.wait(2)

                            thisExp.addData('Q3_Percentage','15%'+'\n')

                        elif k_3[0] == 'right':   # >20%

                            text_3.text = "A sure gain of %d tokens" % (3)

                            text_1.draw()

                            text_2.draw()

                            text_3.draw()

                            text_4.draw()

                            text_5.draw()

                            text_6.draw()

                            text_7.draw()

                            text_8.draw()

                            text_0.draw()

                            win.flip()

                            core.wait(0)

                            k_3 = event.waitKeys(keyList = ['left','right'])



                            if k_3[0] == 'left':   # <30%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','25%'+'\n')

                            elif k_3[0] == 'right':   # >30%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','35%'+'\n')

                    elif k_3[0] == 'right':   # >40%

                        text_3.text = "A sure gain of %d tokens" % (6)

                        text_1.draw()

                        text_2.draw()

                        text_3.draw()

                        text_4.draw()

                        text_5.draw()

                        text_6.draw()

                        text_7.draw()

                        text_8.draw()

                        text_0.draw()

                        win.flip()

                        core.wait(0)

                        k_3 = event.waitKeys(keyList = ['left','right'])



                        if k_3[0] == 'left':         # <60%

                            text_3.text = "A sure gain of %d tokens" % (5)

                            text_1.draw()

                            text_2.draw()

                            text_3.draw()

                            text_4.draw()

                            text_5.draw()

                            text_6.draw()

                            text_7.draw()

                            text_8.draw()

                            text_0.draw()

                            win.flip()

                            core.wait(0)

                            k_3 = event.waitKeys(keyList = ['left','right'])



                            if k_3[0] == 'left':     # <50%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','45%'+'\n')

                            elif k_3[0] == 'right':   # >50%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','55%'+'\n')



                        elif k_3[0] == 'right':   # >60%

                            text_9.draw()

                            win.flip()

                            core.wait(2)

                            thisExp.addData('Q3_Percentage','65%'+'\n')



            elif k_3[0] == 'right':        # >70%

                text_3.text = "A sure gain of %d tokens" % (9)

                text_1.text = "Now, which option would you select?"

                text_4.text = ""

                text_1.draw()

                text_2.draw()

                text_3.draw()

                text_4.draw()

                text_5.draw()

                text_6.draw()

                text_7.draw()

                text_8.draw()

                text_0.draw()

                win.flip()

                core.wait(0)

                k_3 = event.waitKeys(keyList = ['left','right'])



                if k_3[0] == 'left':         # <90%

                    text_3.text = "A sure gain of %d tokens" % (8)

                    text_1.draw()

                    text_2.draw()

                    text_3.draw()

                    text_4.draw()

                    text_5.draw()

                    text_6.draw()

                    text_7.draw()

                    text_8.draw()

                    text_0.draw()

                    win.flip()

                    core.wait(0)

                    k_3 = event.waitKeys(keyList = ['left','right'])



                    if k_3[0] == 'left':     # <80%

                        text_9.draw()

                        win.flip()

                        core.wait(2)

                        thisExp.addData('Q3_Percentage','75%'+'\n')

                    elif k_3[0] == 'right':   # >80%

                        text_9.draw()

                        win.flip()

                        core.wait(2)

                        thisExp.addData('Q3_Percentage','85%'+'\n')

                elif k_3[0] == 'right':    # >90%

                    text_9.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','95%'+'\n')

        elif count == 1 or count == 13 or count == 23:

            count += 1



            """20% probability distribution fearful-block"""



            n = 8     # let n be the initial number of tokens for guarantee

            text_1 = visual.TextStim(win,text = "The computer has randomly selected 1 face image out of the 100 faces.",height = 0.05,font = "Arial", color = 'black',pos = (-0.045,0.35),bold = False)

            text_4 = visual.TextStim(win,text = "If you were to gamble about whether this face is FEARFUL, which option would you prefer?",height = 0.05,font = "Arial", color = 'black',pos = (0,0.2),bold = False)

            text_2 = visual.TextStim(win,text = "Option 1:",height = 0.05, color = 'black',font = "Arial",pos = (-0.4,0),bold = True)

            text_3 = visual.TextStim(win,text = "",height = 0.05, color = 'black',font = "Arial",pos = (-0.4,-0.1),bold = False)

            text_5 = visual.TextStim(win,text = "Option 2:",height = 0.05,font = "Arial", color = 'black',pos = (0.4,0),bold = True)

            text_6 = visual.TextStim(win,text = "A gain of 10 tokens if the face is",height = 0.05, color = 'black',font = "Arial",pos = (0.4,-0.1),bold = False)

            text_7 = visual.TextStim(win,text = "Fearful",height = 0.05, color = 'darkred',font = "Arial",pos = (0.14,-0.15),bold = True)

            text_8 = visual.TextStim(win,text = "or 0 tokens otherwise",height = 0.05, color = 'black',font = "Arial",pos = (0.445,-0.15),bold = False)

            text_0 = visual.TextStim(win,text = "LEFT key = Option 1     RIGHT key = Option 2",height = 0.04,font = "Arial", color = 'black',pos = (0,-0.4),italic = True)

            text_9 = visual.TextStim(win,text = "Your response has been recorded.",height = 0.05,font = "Arial", color = 'black',pos = (0,0))

            text_3.text = "A sure gain of %d tokens" % (n)

            text_1.draw()

            text_2.draw()

            text_3.draw()

            text_4.draw()

            text_5.draw()

            text_6.draw()

            text_7.draw()

            text_8.draw()

            text_0.draw()

            win.flip()

            core.wait(0)

            k_3 = event.waitKeys(keyList = ['left','right']) # 'q' for gurantee and 'p' for gamble



            if k_3[0] == 'left':   # < 80%

                text_1.text = "Now, which option would you select?"

                text_3.text = "A sure gain of %d tokens" % (1)

                text_4.text = ""

                text_1.draw()

                text_2.draw()

                text_3.draw()

                text_4.draw()

                text_5.draw()

                text_6.draw()

                text_7.draw()

                text_8.draw()

                text_0.draw()

                win.flip()

                core.wait(0)

                k_3 = event.waitKeys(keyList = ['left','right'])



                if k_3[0] == 'left':   # <10%

                    text_9.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','5%'+'\n')

                elif k_3[0] == 'right':   # >10%

                    text_3.text = "A sure gain of %d tokens" % (5)

                    text_1.draw()

                    text_2.draw()

                    text_3.draw()

                    text_4.draw()

                    text_5.draw()

                    text_6.draw()

                    text_7.draw()

                    text_8.draw()

                    text_0.draw()

                    win.flip()

                    core.wait(0)

                    k_3 = event.waitKeys(keyList = ['left','right'])



                    if k_3[0] == 'left':         # <50%

                        text_3.text = "A sure gain of %d tokens" % (2)

                        text_1.draw()

                        text_2.draw()

                        text_3.draw()

                        text_4.draw()

                        text_5.draw()

                        text_6.draw()

                        text_7.draw()

                        text_8.draw()

                        text_0.draw()

                        win.flip()

                        core.wait(0)

                        k_3 = event.waitKeys(keyList = ['left','right'])



                        if k_3[0] == 'left':     # <20%

                            text_9.draw()

                            win.flip()

                            core.wait(2)

                            thisExp.addData('Q3_Percentage','15%'+'\n')

                        elif k_3[0] == 'right':   # >20%

                            text_3.text = "A sure gain of %d tokens" % (3)

                            text_1.draw()

                            text_2.draw()

                            text_3.draw()

                            text_4.draw()

                            text_5.draw()

                            text_6.draw()

                            text_7.draw()

                            text_8.draw()

                            text_0.draw()

                            win.flip()

                            core.wait(0)

                            k_3 = event.waitKeys(keyList = ['left','right'])



                            if k_3[0] == 'left':   # <30%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','25%'+'\n')

                            elif k_3[0] == 'right':   # >30%

                                text_3.text = "A sure gain of %d tokens" % (4)

                                text_1.draw()

                                text_2.draw()

                                text_3.draw()

                                text_4.draw()

                                text_5.draw()

                                text_6.draw()

                                text_7.draw()

                                text_8.draw()

                                text_0.draw()

                                win.flip()

                                core.wait(0)

                                k_3 = event.waitKeys(keyList = ['left','right'])



                                if k_3[0] == 'left':   # <40%

                                    text_9.draw()

                                    win.flip()

                                    core.wait(2)

                                    thisExp.addData('Q3_Percentage','35%'+'\n')

                                elif k_3[0] == 'right':   # >40%

                                    text_9.draw()

                                    win.flip()

                                    core.wait(2)

                                    thisExp.addData('Q3_Percentage','45%'+'\n')

                    elif k_3[0] == 'right':   # >50%

                        text_3.text = "A sure gain of %d tokens" % (7)

                        text_1.draw()

                        text_2.draw()

                        text_3.draw()

                        text_4.draw()

                        text_5.draw()

                        text_6.draw()

                        text_7.draw()

                        text_8.draw()

                        text_0.draw()

                        win.flip()

                        core.wait(0)

                        k_3 = event.waitKeys(keyList = ['left','right'])



                        if k_3[0] == 'left':         # <70%

                            text_3.text = "A sure gain of %d tokens" % (6)

                            text_1.draw()

                            text_2.draw()

                            text_3.draw()

                            text_4.draw()

                            text_5.draw()

                            text_6.draw()

                            text_7.draw()

                            text_8.draw()

                            text_0.draw()

                            win.flip()

                            core.wait(0)

                            k_3 = event.waitKeys(keyList = ['left','right'])



                            if k_3[0] == 'left':     # <60%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','55%'+'\n')

                            elif k_3[0] == 'right':   # >60%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','65%'+'\n')



                        elif k_3[0] == 'right':   # >70%

                            thisExp.addData('Q3_Percentage','75%'+'\n')



            elif k_3[0] == 'right':        # >80%

                text_3.text = "A sure gain of %d tokens" % (9)

                text_1.text = "Now, which option would you select?"

                text_4.text = ""

                text_1.draw()

                text_2.draw()

                text_3.draw()

                text_4.draw()

                text_5.draw()

                text_6.draw()

                text_7.draw()

                text_8.draw()

                text_0.draw()

                win.flip()

                core.wait(0)

                k_3 = event.waitKeys(keyList = ['left','right'])



                if k_3[0] == 'left':         # <90%

                    text_9.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','85%'+'\n')

                elif k_3[0] == 'right':    # >90%

                    text_9.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','95%'+'\n')

        elif count == 8 or count == 16 or count == 28:

            count += 1



            """20% probability distribution neutral-block"""



            n = 8     # let n be the initial number of tokens for guarantee

            text_1 = visual.TextStim(win,text = "The computer has randomly selected 1 face image out of the 100 faces.",height = 0.05,font = "Arial", color = 'black',pos = (-0.045,0.35),bold = False)

            text_4 = visual.TextStim(win,text = "If you were to gamble about whether this face is NEUTRAL, which option would you prefer?",height = 0.05,font = "Arial", color = 'black',pos = (0,0.2),bold = False)

            text_2 = visual.TextStim(win,text = "Option 1:",height = 0.05, color = 'black',font = "Arial",pos = (-0.4,0),bold = True)

            text_3 = visual.TextStim(win,text = "",height = 0.05, color = 'black',font = "Arial",pos = (-0.4,-0.1),bold = False)

            text_5 = visual.TextStim(win,text = "Option 2:",height = 0.05,font = "Arial", color = 'black',pos = (0.4,0),bold = True)

            text_6 = visual.TextStim(win,text = "A gain of 10 tokens if the face is",height = 0.05, color = 'black',font = "Arial",pos = (0.4,-0.1),bold = False)

            text_7 = visual.TextStim(win,text = "Neutral",height = 0.05, color = 'blue',font = "Arial",pos = (0.14,-0.15),bold = True)

            text_8 = visual.TextStim(win,text = "or 0 tokens otherwise",height = 0.05, color = 'black',font = "Arial",pos = (0.445,-0.15),bold = False)

            text_0 = visual.TextStim(win,text = "LEFT key = Option 1     RIGHT key = Option 2",height = 0.04,font = "Arial", color = 'black',pos = (0,-0.4),italic = True)

            text_9 = visual.TextStim(win,text = "Your response has been recorded.",height = 0.05,font = "Arial", color = 'black',pos = (0,0))

            text_3.text = "A sure gain of %d tokens" % (n)

            text_1.draw()

            text_2.draw()

            text_3.draw()

            text_4.draw()

            text_5.draw()

            text_6.draw()

            text_7.draw()

            text_8.draw()

            text_0.draw()

            win.flip()

            core.wait(0)

            k_3 = event.waitKeys(keyList = ['left','right']) # 'q' for gurantee and 'p' for gamble



            if k_3[0] == 'left':   # < 80%

                text_1.text = "Now, which option would you select?"

                text_3.text = "A sure gain of %d tokens" % (1)

                text_4.text = ""

                text_1.draw()

                text_2.draw()

                text_3.draw()

                text_4.draw()

                text_5.draw()

                text_6.draw()

                text_7.draw()

                text_8.draw()

                text_0.draw()

                win.flip()

                core.wait(0)

                k_3 = event.waitKeys(keyList = ['left','right'])



                if k_3[0] == 'left':   # <10%

                    text_9.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','5%'+'\n')

                elif k_3[0] == 'right':   # >10%

                    text_3.text = "A sure gain of %d tokens" % (5)

                    text_1.draw()

                    text_2.draw()

                    text_3.draw()

                    text_4.draw()

                    text_5.draw()

                    text_6.draw()

                    text_7.draw()

                    text_8.draw()

                    text_0.draw()

                    win.flip()

                    core.wait(0)

                    k_3 = event.waitKeys(keyList = ['left','right'])



                    if k_3[0] == 'left':         # <50%

                        text_3.text = "A sure gain of %d tokens" % (2)

                        text_1.draw()

                        text_2.draw()

                        text_3.draw()

                        text_4.draw()

                        text_5.draw()

                        text_6.draw()

                        text_7.draw()

                        text_8.draw()

                        text_0.draw()

                        win.flip()

                        core.wait(0)

                        k_3 = event.waitKeys(keyList = ['left','right'])



                        if k_3[0] == 'left':     # <20%

                            text_9.draw()

                            win.flip()

                            core.wait(2)

                            thisExp.addData('Q3_Percentage','15%'+'\n')

                        elif k_3[0] == 'right':   # >20%

                            text_3.text = "A sure gain of %d tokens" % (3)

                            text_1.draw()

                            text_2.draw()

                            text_3.draw()

                            text_4.draw()

                            text_5.draw()

                            text_6.draw()

                            text_7.draw()

                            text_8.draw()

                            text_0.draw()

                            win.flip()

                            core.wait(0)

                            k_3 = event.waitKeys(keyList = ['left','right'])



                            if k_3[0] == 'left':   # <30%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','25%'+'\n')

                            elif k_3[0] == 'right':   # >30%

                                text_3.text = "A sure gain of %d tokens" % (4)

                                text_1.draw()

                                text_2.draw()

                                text_3.draw()

                                text_4.draw()

                                text_5.draw()

                                text_6.draw()

                                text_7.draw()

                                text_8.draw()

                                text_0.draw()

                                win.flip()

                                core.wait(0)

                                k_3 = event.waitKeys(keyList = ['left','right'])



                                if k_3[0] == 'left':   # <40%

                                    text_9.draw()

                                    win.flip()

                                    core.wait(2)

                                    thisExp.addData('Q3_Percentage','35%'+'\n')

                                elif k_3[0] == 'right':   # >40%

                                    text_9.draw()

                                    win.flip()

                                    core.wait(2)

                                    thisExp.addData('Q3_Percentage','45%'+'\n')

                    elif k_3[0] == 'right':   # >50%

                        text_3.text = "A sure gain of %d tokens" % (7)

                        text_1.draw()

                        text_2.draw()

                        text_3.draw()

                        text_4.draw()

                        text_5.draw()

                        text_6.draw()

                        text_7.draw()

                        text_8.draw()

                        text_0.draw()

                        win.flip()

                        core.wait(0)

                        k_3 = event.waitKeys(keyList = ['left','right'])



                        if k_3[0] == 'left':         # <70%

                            text_3.text = "A sure gain of %d tokens" % (6)

                            text_1.draw()

                            text_2.draw()

                            text_3.draw()

                            text_4.draw()

                            text_5.draw()

                            text_6.draw()

                            text_7.draw()

                            text_8.draw()

                            text_0.draw()

                            win.flip()

                            core.wait(0)

                            k_3 = event.waitKeys(keyList = ['left','right'])



                            if k_3[0] == 'left':     # <60%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','55%'+'\n')

                            elif k_3[0] == 'right':   # >60%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','65%'+'\n')



                        elif k_3[0] == 'right':   # >70%

                            thisExp.addData('Q3_Percentage','75%'+'\n')



            elif k_3[0] == 'right':        # >80%

                text_3.text = "A sure gain of %d tokens" % (9)

                text_1.text = "Now, which option would you select?"

                text_4.text = ""

                text_1.draw()

                text_2.draw()

                text_3.draw()

                text_4.draw()

                text_5.draw()

                text_6.draw()

                text_7.draw()

                text_8.draw()

                text_0.draw()

                win.flip()

                core.wait(0)

                k_3 = event.waitKeys(keyList = ['left','right'])



                if k_3[0] == 'left':         # <90%

                    text_9.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','85%'+'\n')

                elif k_3[0] == 'right':    # >90%

                    text_9.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','95%'+'\n')

        elif count == -1 or count == 4 or count == 11 or count == 22:

            count += 1



            """50% probability distribution fearful-block"""



            n = 8     # let n be the initial number of tokens for guarantee

            text_1 = visual.TextStim(win,text = "The computer has randomly selected 1 face image out of the 100 faces.",height = 0.05,font = "Arial", color = 'black',pos = (-0.045,0.35),bold = False)

            text_4 = visual.TextStim(win,text = "If you were to gamble about whether this face is FEARFUL, which option would you prefer?",height = 0.05,font = "Arial", color = 'black',pos = (0,0.2),bold = False)

            text_2 = visual.TextStim(win,text = "Option 1:",height = 0.05, color = 'black',font = "Arial",pos = (-0.4,0),bold = True)

            text_3 = visual.TextStim(win,text = "",height = 0.05, color = 'black',font = "Arial",pos = (-0.4,-0.1),bold = False)

            text_5 = visual.TextStim(win,text = "Option 2:",height = 0.05,font = "Arial", color = 'black',pos = (0.4,0),bold = True)

            text_6 = visual.TextStim(win,text = "A gain of 10 tokens if the face is",height = 0.05, color = 'black',font = "Arial",pos = (0.4,-0.1),bold = False)

            text_7 = visual.TextStim(win,text = "Fearful",height = 0.05, color = 'darkred',font = "Arial",pos = (0.14,-0.15),bold = True)

            text_8 = visual.TextStim(win,text = "or 0 tokens otherwise",height = 0.05, color = 'black',font = "Arial",pos = (0.445,-0.15),bold = False)

            text_0 = visual.TextStim(win,text = "LEFT key = Option 1     RIGHT key = Option 2",height = 0.04,font = "Arial", color = 'black',pos = (0,-0.4),italic = True)

            text_9 = visual.TextStim(win,text = "Your response has been recorded.",height = 0.05,font = "Arial", color = 'black',pos = (0,0))

            text_3.text = "A sure gain of %d tokens" % (n)

            text_1.draw()

            text_2.draw()

            text_3.draw()

            text_4.draw()

            text_5.draw()

            text_6.draw()

            text_7.draw()

            text_8.draw()

            text_0.draw()

            win.flip()

            core.wait(0)

            k_3 = event.waitKeys(keyList = ['left','right']) # 'q' for gurantee and 'p' for gamble



            if k_3[0] == 'left':   # < 80%

                text_1.text = "Now, which option would you select?"

                text_3.text = "A sure gain of %d tokens" % (2)

                text_4.text = ""

                text_1.draw()

                text_2.draw()

                text_3.draw()

                text_4.draw()

                text_5.draw()

                text_6.draw()

                text_7.draw()

                text_8.draw()

                text_0.draw()

                win.flip()

                core.wait(0)

                k_3 = event.waitKeys(keyList = ['left','right'])



                if k_3[0] == 'left':   # <20%

                    text_3.text = "A sure gain of %d tokens" % (1)

                    text_1.draw()

                    text_2.draw()

                    text_3.draw()

                    text_4.draw()

                    text_5.draw()

                    text_6.draw()

                    text_7.draw()

                    text_8.draw()

                    text_0.draw()

                    win.flip()

                    core.wait(0)

                    k_3 = event.waitKeys(keyList = ['left','right'])



                    if k_3[0] == 'left':   # <10%

                        text_9.draw()

                        win.flip()

                        core.wait(2)

                        thisExp.addData('Q3_Percentage','5%'+'\n')

                    elif k_3[0] == 'right':   # >10%

                        text_9.draw()

                        win.flip()

                        core.wait(2)

                        thisExp.addData('Q3_Percentage','15%'+'\n')

                elif k_3[0] == 'right':   # >20%

                    text_3.text = "A sure gain of %d tokens" % (6)

                    text_1.draw()

                    text_2.draw()

                    text_3.draw()

                    text_4.draw()

                    text_5.draw()

                    text_6.draw()

                    text_7.draw()

                    text_8.draw()

                    text_0.draw()

                    win.flip()

                    core.wait(0)

                    k_3 = event.waitKeys(keyList = ['left','right'])



                    if k_3[0] == 'left':         # <60%

                        text_3.text = "A sure gain of %d tokens" % (4)

                        text_1.draw()

                        text_2.draw()

                        text_3.draw()

                        text_4.draw()

                        text_5.draw()

                        text_6.draw()

                        text_7.draw()

                        text_8.draw()

                        text_0.draw()

                        win.flip()

                        core.wait(0)

                        k_3 = event.waitKeys(keyList = ['left','right'])



                        if k_3[0] == 'left':     # <40%

                            text_3.text = "A sure gain of %d tokens" % (3)

                            text_1.draw()

                            text_2.draw()

                            text_3.draw()

                            text_4.draw()

                            text_5.draw()

                            text_6.draw()

                            text_7.draw()

                            text_8.draw()

                            text_0.draw()

                            win.flip()

                            core.wait(0)

                            k_3 = event.waitKeys(keyList = ['left','right'])



                            if k_3[0] == 'left':   # <30%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','25%'+'\n')

                            elif k_3[0] == 'right':   # >30%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','35%'+'\n')

                        elif k_3[0] == 'right':   # >40%

                            text_3.text = "A sure gain of %d tokens" % (5)

                            text_1.draw()

                            text_2.draw()

                            text_3.draw()

                            text_4.draw()

                            text_5.draw()

                            text_6.draw()

                            text_7.draw()

                            text_8.draw()

                            text_0.draw()

                            win.flip()

                            core.wait(0)

                            k_3 = event.waitKeys(keyList = ['left','right'])



                            if k_3[0] == 'left':   # <50%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','45%'+'\n')

                            elif k_3[0] == 'right':   # >50%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','55%'+'\n')

                    elif k_3[0] == 'right':   # >60%

                        text_3.text = "A sure gain of %d tokens" % (7)

                        text_1.draw()

                        text_2.draw()

                        text_3.draw()

                        text_4.draw()

                        text_5.draw()

                        text_6.draw()

                        text_7.draw()

                        text_8.draw()

                        text_0.draw()

                        win.flip()

                        core.wait(0)

                        k_3 = event.waitKeys(keyList = ['left','right'])



                        if k_3[0] == 'left':         # <70%

                            text_9.draw()

                            win.flip()

                            core.wait(2)

                            thisExp.addData('Q3_Percentage','65%'+'\n')

                        elif k_3[0] == 'right':   # >70%

                            text_9.draw()

                            win.flip()

                            core.wait(2)

                            thisExp.addData('Q3_Percentage','75%'+'\n')

            elif k_3[0] == 'right':        # >80%

                text_3.text = "A sure gain of %d tokens" % (9)

                text_1.text = "Now, which option would you select?"

                text_4.text = ""

                text_1.draw()

                text_2.draw()

                text_3.draw()

                text_4.draw()

                text_5.draw()

                text_6.draw()

                text_7.draw()

                text_8.draw()

                text_0.draw()

                win.flip()

                core.wait(0)

                k_3 = event.waitKeys(keyList = ['left','right'])



                if k_3[0] == 'left':         # <90%

                    text_9.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','85%'+'\n')

                elif k_3[0] == 'right':    # >90%

                    text_9.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','95%'+'\n')

        elif count == 0 or count ==  7 or count == 19 or count == 26:

            count += 1



            """50% probability distribution neutral-block"""



            n = 8     # let n be the initial number of tokens for guarantee

            text_1 = visual.TextStim(win,text = "The computer has randomly selected 1 face image out of the 100 faces.",height = 0.05,font = "Arial", color = 'black',pos = (-0.045,0.35),bold = False)

            text_4 = visual.TextStim(win,text = "If you were to gamble about whether this face is NEUTRAL, which option would you prefer?",height = 0.05,font = "Arial", color = 'black',pos = (0,0.2),bold = False)

            text_2 = visual.TextStim(win,text = "Option 1:",height = 0.05, color = 'black',font = "Arial",pos = (-0.4,0),bold = True)

            text_3 = visual.TextStim(win,text = "",height = 0.05, color = 'black',font = "Arial",pos = (-0.4,-0.1),bold = False)

            text_5 = visual.TextStim(win,text = "Option 2:",height = 0.05,font = "Arial", color = 'black',pos = (0.4,0),bold = True)

            text_6 = visual.TextStim(win,text = "A gain of 10 tokens if the face is",height = 0.05, color = 'black',font = "Arial",pos = (0.4,-0.1),bold = False)

            text_7 = visual.TextStim(win,text = "Neutral",height = 0.05, color = 'blue',font = "Arial",pos = (0.14,-0.15),bold = True)

            text_8 = visual.TextStim(win,text = "or 0 tokens otherwise",height = 0.05, color = 'black',font = "Arial",pos = (0.445,-0.15),bold = False)

            text_0 = visual.TextStim(win,text = "LEFT key = Option 1     RIGHT key = Option 2",height = 0.04,font = "Arial", color = 'black',pos = (0,-0.4),italic = True)

            text_9 = visual.TextStim(win,text = "Your response has been recorded.",height = 0.05,font = "Arial", color = 'black',pos = (0,0))

            text_3.text = "A sure gain of %d tokens" % (n)

            text_1.draw()

            text_2.draw()

            text_3.draw()

            text_4.draw()

            text_5.draw()

            text_6.draw()

            text_7.draw()

            text_8.draw()

            text_0.draw()

            win.flip()

            core.wait(0)

            k_3 = event.waitKeys(keyList = ['left','right']) # 'q' for gurantee and 'p' for gamble



            if k_3[0] == 'left':   # < 80%

                text_1.text = "Now, which option would you select?"

                text_3.text = "A sure gain of %d tokens" % (2)

                text_4.text = ""

                text_1.draw()

                text_2.draw()

                text_3.draw()

                text_4.draw()

                text_5.draw()

                text_6.draw()

                text_7.draw()

                text_8.draw()

                text_0.draw()

                win.flip()

                core.wait(0)

                k_3 = event.waitKeys(keyList = ['left','right'])



                if k_3[0] == 'left':   # <20%

                    text_3.text = "A sure gain of %d tokens" % (1)

                    text_1.draw()

                    text_2.draw()

                    text_3.draw()

                    text_4.draw()

                    text_5.draw()

                    text_6.draw()

                    text_7.draw()

                    text_8.draw()

                    text_0.draw()

                    win.flip()

                    core.wait(0)

                    k_3 = event.waitKeys(keyList = ['left','right'])



                    if k_3[0] == 'left':   # <10%

                        text_9.draw()

                        win.flip()

                        core.wait(2)

                        thisExp.addData('Q3_Percentage','5%'+'\n')

                    elif k_3[0] == 'right':   # >10%

                        text_9.draw()

                        win.flip()

                        core.wait(2)

                        thisExp.addData('Q3_Percentage','15%'+'\n')

                elif k_3[0] == 'right':   # >20%

                    text_3.text = "A sure gain of %d tokens" % (6)

                    text_1.draw()

                    text_2.draw()

                    text_3.draw()

                    text_4.draw()

                    text_5.draw()

                    text_6.draw()

                    text_7.draw()

                    text_8.draw()

                    text_0.draw()

                    win.flip()

                    core.wait(0)

                    k_3 = event.waitKeys(keyList = ['left','right'])



                    if k_3[0] == 'left':         # <60%

                        text_3.text = "A sure gain of %d tokens" % (4)

                        text_1.draw()

                        text_2.draw()

                        text_3.draw()

                        text_4.draw()

                        text_5.draw()

                        text_6.draw()

                        text_7.draw()

                        text_8.draw()

                        text_0.draw()

                        win.flip()

                        core.wait(0)

                        k_3 = event.waitKeys(keyList = ['left','right'])



                        if k_3[0] == 'left':     # <40%

                            text_3.text = "A sure gain of %d tokens" % (3)

                            text_1.draw()

                            text_2.draw()

                            text_3.draw()

                            text_4.draw()

                            text_5.draw()

                            text_6.draw()

                            text_7.draw()

                            text_8.draw()

                            text_0.draw()

                            win.flip()

                            core.wait(0)

                            k_3 = event.waitKeys(keyList = ['left','right'])



                            if k_3[0] == 'left':   # <30%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','25%'+'\n')

                            elif k_3[0] == 'right':   # >30%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','35%'+'\n')

                        elif k_3[0] == 'right':   # >40%

                            text_3.text = "A sure gain of %d tokens" % (5)

                            text_1.draw()

                            text_2.draw()

                            text_3.draw()

                            text_4.draw()

                            text_5.draw()

                            text_6.draw()

                            text_7.draw()

                            text_8.draw()

                            text_0.draw()

                            win.flip()

                            core.wait(0)

                            k_3 = event.waitKeys(keyList = ['left','right'])



                            if k_3[0] == 'left':   # <50%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','45%'+'\n')

                            elif k_3[0] == 'right':   # >50%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','55%'+'\n')

                    elif k_3[0] == 'right':   # >60%

                        text_3.text = "A sure gain of %d tokens" % (7)

                        text_1.draw()

                        text_2.draw()

                        text_3.draw()

                        text_4.draw()

                        text_5.draw()

                        text_6.draw()

                        text_7.draw()

                        text_8.draw()

                        text_0.draw()

                        win.flip()

                        core.wait(0)

                        k_3 = event.waitKeys(keyList = ['left','right'])



                        if k_3[0] == 'left':         # <70%

                            text_9.draw()

                            win.flip()

                            core.wait(2)

                            thisExp.addData('Q3_Percentage','65%'+'\n')

                        elif k_3[0] == 'right':   # >70%

                            text_9.draw()

                            win.flip()

                            core.wait(2)

                            thisExp.addData('Q3_Percentage','75%'+'\n')

            elif k_3[0] == 'right':        # >80%

                text_3.text = "A sure gain of %d tokens" % (9)

                text_1.text = "Now, which option would you select?"

                text_4.text = ""

                text_1.draw()

                text_2.draw()

                text_3.draw()

                text_4.draw()

                text_5.draw()

                text_6.draw()

                text_7.draw()

                text_8.draw()

                text_0.draw()

                win.flip()

                core.wait(0)

                k_3 = event.waitKeys(keyList = ['left','right'])



                if k_3[0] == 'left':         # <90%

                    text_9.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','85%'+'\n')

                elif k_3[0] == 'right':    # >90%

                    text_9.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','95%'+'\n')

        elif count == 5 or count == 12 or count == 25:

            count += 1



            """80% probability distribution fearful-block"""



            n = 2     # let n be the initial number of tokens for guarantee

            text_1 = visual.TextStim(win,text = "The computer has randomly selected 1 face image out of the 100 faces.",height = 0.05,font = "Arial", color = 'black',pos = (-0.045,0.35),bold = False)

            text_4 = visual.TextStim(win,text = "If you were to gamble about whether this face is FEARFUL, which option would you prefer?",height = 0.05,font = "Arial", color = 'black',pos = (0,0.2),bold = False)

            text_2 = visual.TextStim(win,text = "Option 1:",height = 0.05, color = 'black',font = "Arial",pos = (-0.4,0),bold = True)

            text_3 = visual.TextStim(win,text = "",height = 0.05, color = 'black',font = "Arial",pos = (-0.4,-0.1),bold = False)

            text_5 = visual.TextStim(win,text = "Option 2:",height = 0.05,font = "Arial", color = 'black',pos = (0.4,0),bold = True)

            text_6 = visual.TextStim(win,text = "A gain of 10 tokens if the face is",height = 0.05, color = 'black',font = "Arial",pos = (0.4,-0.1),bold = False)

            text_7 = visual.TextStim(win,text = "Fearful",height = 0.05, color = 'darkred',font = "Arial",pos = (0.14,-0.15),bold = True)

            text_8 = visual.TextStim(win,text = "or 0 tokens otherwise",height = 0.05, color = 'black',font = "Arial",pos = (0.445,-0.15),bold = False)

            text_0 = visual.TextStim(win,text = "LEFT key = Option 1     RIGHT key = Option 2",height = 0.04,font = "Arial", color = 'black',pos = (0,-0.4),italic = True)

            text_9 = visual.TextStim(win,text = "Your response has been recorded.",height = 0.05,font = "Arial", color = 'black',pos = (0,0))

            text_3.text = "A sure gain of %d tokens" % (n)

            text_1.draw()

            text_2.draw()

            text_3.draw()

            text_4.draw()

            text_5.draw()

            text_6.draw()

            text_7.draw()

            text_8.draw()

            text_0.draw()

            win.flip()

            core.wait(0)

            k_3 = event.waitKeys(keyList = ['left','right']) # 'q' for gurantee and 'p' for gamble



            if k_3[0] == 'left':   # < 20%

                text_1.text = "Now, which option would you select?"

                text_3.text = "A sure gain of %d tokens" % (1)

                text_4.text = ""

                text_1.draw()

                text_2.draw()

                text_3.draw()

                text_4.draw()

                text_5.draw()

                text_6.draw()

                text_7.draw()

                text_8.draw()

                text_0.draw()

                win.flip()

                core.wait(0)

                k_3 = event.waitKeys(keyList = ['left','right'])



                if k_3[0] == 'left':   # <10%

                    text_9.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','5%'+'\n')

                elif k_3[0] == 'right':   # >10%

                    text_9.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','15%'+'\n')

            elif k_3[0] == 'right':   # >20%

                text_3.text = "A sure gain of %d tokens" % (9)

                text_1.text = "Now, which option would you select?"

                text_4.text = ""

                text_1.draw()

                text_2.draw()

                text_3.draw()

                text_4.draw()

                text_5.draw()

                text_6.draw()

                text_7.draw()

                text_8.draw()

                text_0.draw()

                win.flip()

                core.wait(0)

                k_3 = event.waitKeys(keyList = ['left','right'])



                if k_3[0] == 'left':         # <90%

                    text_3.text = "A sure gain of %d tokens" % (5)

                    text_1.draw()

                    text_2.draw()

                    text_3.draw()

                    text_4.draw()

                    text_5.draw()

                    text_6.draw()

                    text_7.draw()

                    text_8.draw()

                    text_0.draw()

                    win.flip()

                    core.wait(0)

                    k_3 = event.waitKeys(keyList = ['left','right'])



                    if k_3[0] == 'left':     # <50%

                        text_3.text = "A sure gain of %d tokens" % (3)

                        text_1.draw()

                        text_2.draw()

                        text_3.draw()

                        text_4.draw()

                        text_5.draw()

                        text_6.draw()

                        text_7.draw()

                        text_8.draw()

                        text_0.draw()

                        win.flip()

                        core.wait(0)

                        k_3 = event.waitKeys(keyList = ['left','right'])



                        if k_3[0] == 'left':   # <30%

                            text_9.draw()

                            win.flip()

                            core.wait(2)

                            thisExp.addData('Q3_Percentage','25%'+'\n')

                        elif k_3[0] == 'right':   # >30%

                            text_3.text = "A sure gain of %d tokens" % (4)

                            text_1.draw()

                            text_2.draw()

                            text_3.draw()

                            text_4.draw()

                            text_5.draw()

                            text_6.draw()

                            text_7.draw()

                            text_8.draw()

                            text_0.draw()

                            win.flip()

                            core.wait(0)

                            k_3 = event.waitKeys(keyList = ['left','right'])



                            if k_3[0] == 'left':   # <40%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','35%'+'\n')

                            elif k_3[0] == 'right':   # >40%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','45%'+'\n')

                    elif k_3[0] == 'right':   # >50%

                        text_3.text = "A sure gain of %d tokens" % (8)

                        text_1.draw()

                        text_2.draw()

                        text_3.draw()

                        text_4.draw()

                        text_5.draw()

                        text_6.draw()

                        text_7.draw()

                        text_8.draw()

                        text_0.draw()

                        win.flip()

                        core.wait(0)

                        k_3 = event.waitKeys(keyList = ['left','right'])



                        if k_3[0] == 'left':   # <80%

                            text_3.text = "A sure gain of %d tokens" % (7)

                            text_1.draw()

                            text_2.draw()

                            text_3.draw()

                            text_4.draw()

                            text_5.draw()

                            text_6.draw()

                            text_7.draw()

                            text_8.draw()

                            text_0.draw()

                            win.flip()

                            core.wait(0)

                            k_3 = event.waitKeys(keyList = ['left','right'])



                            if k_3[0] == 'left':   # <70%

                                text_3.text = "A sure gain of %d tokens" % (6)

                                text_1.draw()

                                text_2.draw()

                                text_3.draw()

                                text_4.draw()

                                text_5.draw()

                                text_6.draw()

                                text_7.draw()

                                text_8.draw()

                                text_0.draw()

                                win.flip()

                                core.wait(0)

                                k_3 = event.waitKeys(keyList = ['left','right'])



                                if k_3[0] == 'left':    # <60%

                                    text_9.draw()

                                    win.flip()

                                    core.wait(2)

                                    thisExp.addData('Q3_Percentage','55%'+'\n')

                                elif k_3[0] == 'right':   # >60%

                                    text_9.draw()

                                    win.flip()

                                    core.wait(2)

                                    thisExp.addData('Q3_Percentage','65%'+'\n')

                            elif k_3[0] == 'right':   # >70%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','75%'+'\n')

                        elif k_3[0] == 'right':   # >80%

                            text_9.draw()

                            win.flip()

                            core.wait(2)

                            thisExp.addData('Q3_Percentage','85%'+'\n')

                elif k_3[0] == 'right':        # >90%

                    text_9.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','95%'+'\n')

        elif count == 10 or count == 20 or count == 27:

            count += 1



            """80% probability distribution neutral-block"""



            n = 9     # let n be the initial number of tokens for guarantee

            text_1 = visual.TextStim(win,text = "The computer has randomly selected 1 face image out of the 100 faces.",height = 0.05,font = "Arial", color = 'black',pos = (-0.045,0.35),bold = False)

            text_4 = visual.TextStim(win,text = "If you were to gamble about whether this face is NEUTRAL, which option would you prefer?",height = 0.05,font = "Arial", color = 'black',pos = (0,0.2),bold = False)

            text_2 = visual.TextStim(win,text = "Option 1:",height = 0.05, color = 'black',font = "Arial",pos = (-0.4,0),bold = True)

            text_3 = visual.TextStim(win,text = "",height = 0.05, color = 'black',font = "Arial",pos = (-0.4,-0.1),bold = False)

            text_5 = visual.TextStim(win,text = "Option 2:",height = 0.05,font = "Arial", color = 'black',pos = (0.4,0),bold = True)

            text_6 = visual.TextStim(win,text = "A gain of 10 tokens if the face is",height = 0.05, color = 'black',font = "Arial",pos = (0.4,-0.1),bold = False)

            text_7 = visual.TextStim(win,text = "Neutral",height = 0.05, color = 'blue',font = "Arial",pos = (0.14,-0.15),bold = True)

            text_8 = visual.TextStim(win,text = "or 0 tokens otherwise",height = 0.05, color = 'black',font = "Arial",pos = (0.445,-0.15),bold = False)

            text_0 = visual.TextStim(win,text = "LEFT key = Option 1     RIGHT key = Option 2",height = 0.04,font = "Arial", color = 'black',pos = (0,-0.4),italic = True)

            text_9 = visual.TextStim(win,text = "Your response has been recorded.",height = 0.05,font = "Arial", color = 'black',pos = (0,0))

            text_3.text = "A sure gain of %d tokens" % (n)

            text_1.draw()

            text_2.draw()

            text_3.draw()

            text_4.draw()

            text_5.draw()

            text_6.draw()

            text_7.draw()

            text_8.draw()

            text_0.draw()

            win.flip()

            core.wait(0)

            k_3 = event.waitKeys(keyList = ['left','right']) # 'q' for gurantee and 'p' for gamble



            if k_3[0] == 'left':   # < 20%

                text_1.text = "Now, which option would you select?"

                text_3.text = "A sure gain of %d tokens" % (1)

                text_4.text = ""

                text_1.draw()

                text_2.draw()

                text_3.draw()

                text_4.draw()

                text_5.draw()

                text_6.draw()

                text_7.draw()

                text_8.draw()

                text_0.draw()

                win.flip()

                core.wait(0)

                k_3 = event.waitKeys(keyList = ['left','right'])



                if k_3[0] == 'left':   # <10%

                    text_9.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','5%'+'\n')

                elif k_3[0] == 'right':   # >10%

                    text_9.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','15%'+'\n')

            elif k_3[0] == 'right':   # >20%

                text_3.text = "A sure gain of %d tokens" % (9)

                text_1.text = "Now, which option would you select?"

                text_4.text = ""

                text_1.draw()

                text_2.draw()

                text_3.draw()

                text_4.draw()

                text_5.draw()

                text_6.draw()

                text_7.draw()

                text_8.draw()

                text_0.draw()

                win.flip()

                core.wait(0)

                k_3 = event.waitKeys(keyList = ['left','right'])



                if k_3[0] == 'left':         # <90%

                    text_3.text = "A sure gain of %d tokens" % (5)

                    text_1.draw()

                    text_2.draw()

                    text_3.draw()

                    text_4.draw()

                    text_5.draw()

                    text_6.draw()

                    text_7.draw()

                    text_8.draw()

                    text_0.draw()

                    win.flip()

                    core.wait(0)

                    k_3 = event.waitKeys(keyList = ['left','right'])



                    if k_3[0] == 'left':     # <50%

                        text_3.text = "A sure gain of %d tokens" % (3)

                        text_1.draw()

                        text_2.draw()

                        text_3.draw()

                        text_4.draw()

                        text_5.draw()

                        text_6.draw()

                        text_7.draw()

                        text_8.draw()

                        text_0.draw()

                        win.flip()

                        core.wait(0)

                        k_3 = event.waitKeys(keyList = ['left','right'])



                        if k_3[0] == 'left':   # <30%

                            text_9.draw()

                            win.flip()

                            core.wait(2)

                            thisExp.addData('Q3_Percentage','25%'+'\n')

                        elif k_3[0] == 'right':   # >30%

                            text_3.text = "A sure gain of %d tokens" % (4)

                            text_1.draw()

                            text_2.draw()

                            text_3.draw()

                            text_4.draw()

                            text_5.draw()

                            text_6.draw()

                            text_7.draw()

                            text_8.draw()

                            text_0.draw()

                            win.flip()

                            core.wait(0)

                            k_3 = event.waitKeys(keyList = ['left','right'])



                            if k_3[0] == 'left':   # <40%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','35%'+'\n')

                            elif k_3[0] == 'right':   # >40%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','45%'+'\n')

                    elif k_3[0] == 'right':   # >50%

                        text_3.text = "A sure gain of %d tokens" % (8)

                        text_1.draw()

                        text_2.draw()

                        text_3.draw()

                        text_4.draw()

                        text_5.draw()

                        text_6.draw()

                        text_7.draw()

                        text_8.draw()

                        text_0.draw()

                        win.flip()

                        core.wait(0)

                        k_3 = event.waitKeys(keyList = ['left','right'])



                        if k_3[0] == 'left':   # <80%

                            text_3.text = "A sure gain of %d tokens" % (7)

                            text_1.draw()

                            text_2.draw()

                            text_3.draw()

                            text_4.draw()

                            text_5.draw()

                            text_6.draw()

                            text_7.draw()

                            text_8.draw()

                            text_0.draw()

                            win.flip()

                            core.wait(0)

                            k_3 = event.waitKeys(keyList = ['left','right'])



                            if k_3[0] == 'left':   # <70%

                                text_3.text = "A sure gain of %d tokens" % (6)

                                text_1.draw()

                                text_2.draw()

                                text_3.draw()

                                text_4.draw()

                                text_5.draw()

                                text_6.draw()

                                text_7.draw()

                                text_8.draw()

                                text_0.draw()

                                win.flip()

                                core.wait(0)

                                k_3 = event.waitKeys(keyList = ['left','right'])



                                if k_3[0] == 'left':    # <60%

                                    text_9.draw()

                                    win.flip()

                                    core.wait(2)

                                    thisExp.addData('Q3_Percentage','55%'+'\n')

                                elif k_3[0] == 'right':   # >60%

                                    text_9.draw()

                                    win.flip()

                                    core.wait(2)

                                    thisExp.addData('Q3_Percentage','65%'+'\n')

                            elif k_3[0] == 'right':   # >70%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','75%'+'\n')

                        elif k_3[0] == 'right':   # >80%

                            text_9.draw()

                            win.flip()

                            core.wait(2)

                            thisExp.addData('Q3_Percentage','85%'+'\n')

                elif k_3[0] == 'right':        # >90%

                    text_9.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','95%'+'\n')

        elif count == 3 or count == 14 or count == 21:

            count += 1



            """90% probability distribution fearful-block"""



            n = 3     # let n be the initial number of tokens for guarantee

            text_1 = visual.TextStim(win,text = "The computer has randomly selected 1 face image out of the 100 faces.",height = 0.05,font = "Arial", color = 'black',pos = (-0.045,0.35),bold = False)

            text_4 = visual.TextStim(win,text = "If you were to gamble about whether this face is FEARFUL, which option would you prefer?",height = 0.05,font = "Arial", color = 'black',pos = (0,0.2),bold = False)

            text_2 = visual.TextStim(win,text = "Option 1:",height = 0.05, color = 'black',font = "Arial",pos = (-0.4,0),bold = True)

            text_3 = visual.TextStim(win,text = "",height = 0.05, color = 'black',font = "Arial",pos = (-0.4,-0.1),bold = False)

            text_5 = visual.TextStim(win,text = "Option 2:",height = 0.05,font = "Arial", color = 'black',pos = (0.4,0),bold = True)

            text_6 = visual.TextStim(win,text = "A gain of 10 tokens if the face is",height = 0.05, color = 'black',font = "Arial",pos = (0.4,-0.1),bold = False)

            text_7 = visual.TextStim(win,text = "Fearful",height = 0.05, color = 'darkred',font = "Arial",pos = (0.14,-0.15),bold = True)

            text_8 = visual.TextStim(win,text = "or 0 tokens otherwise",height = 0.05, color = 'black',font = "Arial",pos = (0.445,-0.15),bold = False)

            text_0 = visual.TextStim(win,text = "LEFT key = Option 1     RIGHT key = Option 2",height = 0.04,font = "Arial", color = 'black',pos = (0,-0.4),italic = True)

            text_9 = visual.TextStim(win,text = "Your response has been recorded.",height = 0.05,font = "Arial", color = 'black',pos = (0,0))

            text_3.text = "A sure gain of %d tokens" % (n)

            text_1.draw()

            text_2.draw()

            text_3.draw()

            text_4.draw()

            text_5.draw()

            text_6.draw()

            text_7.draw()

            text_8.draw()

            text_0.draw()

            win.flip()

            core.wait(0)

            k_3 = event.waitKeys(keyList = ['left','right']) # 'q' for gurantee and 'p' for gamble



            if k_3[0] == 'left':   # < 30%

                text_1.text = "Now, which option would you select?"

                text_3.text = "A sure gain of %d tokens" % (1)

                text_4.text = ""

                text_1.draw()

                text_2.draw()

                text_3.draw()

                text_4.draw()

                text_5.draw()

                text_6.draw()

                text_7.draw()

                text_8.draw()

                text_0.draw()

                win.flip()

                core.wait(0)

                k_3 = event.waitKeys(keyList = ['left','right'])



                if k_3[0] == 'left':   # <10%

                    text_9.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','5%'+'\n')

                elif k_3[0] == 'right':   # >10%

                    text_3.text = "A sure gain of %d tokens" % (2)

                    text_1.draw()

                    text_2.draw()

                    text_3.draw()

                    text_4.draw()

                    text_5.draw()

                    text_6.draw()

                    text_7.draw()

                    text_8.draw()

                    text_0.draw()

                    win.flip()

                    core.wait(0)

                    k_3 = event.waitKeys(keyList = ['left','right'])



                    if k_3[0] == 'left':   # <20%

                        text_9.draw()

                        win.flip()

                        core.wait(2)

                        thisExp.addData('Q3_Percentage','15%'+'\n')

                    elif k_3[0] == 'right':   # >20%

                        text_9.draw()

                        win.flip()

                        core.wait(2)

                        thisExp.addData('Q3_Percentage','25%'+'\n')

            elif k_3[0] == 'right':   # >30%

                text_3.text = "A sure gain of %d tokens" % (9)

                text_1.text = "Now, which option would you select?"

                text_4.text = ""

                text_1.draw()

                text_2.draw()

                text_3.draw()

                text_4.draw()

                text_5.draw()

                text_6.draw()

                text_7.draw()

                text_8.draw()

                text_0.draw()

                win.flip()

                core.wait(0)

                k_3 = event.waitKeys(keyList = ['left','right'])



                if k_3[0] == 'left':         # <90%

                    text_3.text = "A sure gain of %d tokens" % (6)

                    text_1.draw()

                    text_2.draw()

                    text_3.draw()

                    text_4.draw()

                    text_5.draw()

                    text_6.draw()

                    text_7.draw()

                    text_8.draw()

                    text_0.draw()

                    win.flip()

                    core.wait(0)

                    k_3 = event.waitKeys(keyList = ['left','right'])



                    if k_3[0] == 'left':     # <60%

                        text_3.text = "A sure gain of %d tokens" % (4)

                        text_1.draw()

                        text_2.draw()

                        text_3.draw()

                        text_4.draw()

                        text_5.draw()

                        text_6.draw()

                        text_7.draw()

                        text_8.draw()

                        text_0.draw()

                        win.flip()

                        core.wait(0)

                        k_3 = event.waitKeys(keyList = ['left','right'])



                        if k_3[0] == 'left':   # <40%

                            text_9.draw()

                            win.flip()

                            core.wait(2)

                            thisExp.addData('Q3_Percentage','35%'+'\n')

                        elif k_3[0] == 'right':   # >40%

                            text_3.text = "A sure gain of %d tokens" % (5)

                            text_1.draw()

                            text_2.draw()

                            text_3.draw()

                            text_4.draw()

                            text_5.draw()

                            text_6.draw()

                            text_7.draw()

                            text_8.draw()

                            text_0.draw()

                            win.flip()

                            core.wait(0)

                            k_3 = event.waitKeys(keyList = ['left','right'])



                            if k_3[0] == 'left':   # <50%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','45%'+'\n')

                            elif k_3[0] == 'right':   # >50%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','55%'+'\n')

                    elif k_3[0] == 'right':   # >60%

                        text_3.text = "A sure gain of %d tokens" % (8)

                        text_1.draw()

                        text_2.draw()

                        text_3.draw()

                        text_4.draw()

                        text_5.draw()

                        text_6.draw()

                        text_7.draw()

                        text_8.draw()

                        text_0.draw()

                        win.flip()

                        core.wait(0)

                        k_3 = event.waitKeys(keyList = ['left','right'])



                        if k_3[0] == 'left':   # <80%

                            text_3.text = "A sure gain of %d tokens" % (7)

                            text_1.draw()

                            text_2.draw()

                            text_3.draw()

                            text_4.draw()

                            text_5.draw()

                            text_6.draw()

                            text_7.draw()

                            text_8.draw()

                            text_0.draw()

                            win.flip()

                            core.wait(0)

                            k_3 = event.waitKeys(keyList = ['left','right'])



                            if k_3[0] == 'left':    # <70%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','65%'+'\n')

                            elif k_3[0] == 'right':   # >70%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','75%'+'\n')

                        elif k_3[0] == 'right':   # >80%

                            text_9.draw()

                            win.flip()

                            core.wait(2)

                            thisExp.addData('Q3_Percentage','85%'+'\n')

                elif k_3[0] == 'right':        # >90%

                    text_9.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','95%'+'\n')

        elif count == 6 or count == 18 or count == 29:

            count += 1



            """90% probability distribution neutral-block"""



            n = 3     # let n be the initial number of tokens for guarantee

            text_1 = visual.TextStim(win,text = "The computer has randomly selected 1 face image out of the 100 faces.",height = 0.05,font = "Arial", color = 'black',pos = (-0.045,0.35),bold = False)

            text_4 = visual.TextStim(win,text = "If you were to gamble about whether this face is NEUTRAL, which option would you prefer?",height = 0.05,font = "Arial", color = 'black',pos = (0,0.2),bold = False)

            text_2 = visual.TextStim(win,text = "Option 1:",height = 0.05, color = 'black',font = "Arial",pos = (-0.4,0),bold = True)

            text_3 = visual.TextStim(win,text = "",height = 0.05, color = 'black',font = "Arial",pos = (-0.4,-0.1),bold = False)

            text_5 = visual.TextStim(win,text = "Option 2:",height = 0.05,font = "Arial", color = 'black',pos = (0.4,0),bold = True)

            text_6 = visual.TextStim(win,text = "A gain of 10 tokens if the face is",height = 0.05, color = 'black',font = "Arial",pos = (0.4,-0.1),bold = False)

            text_7 = visual.TextStim(win,text = "Neutral",height = 0.05, color = 'blue',font = "Arial",pos = (0.14,-0.15),bold = True)

            text_8 = visual.TextStim(win,text = "or 0 tokens otherwise",height = 0.05, color = 'black',font = "Arial",pos = (0.445,-0.15),bold = False)

            text_0 = visual.TextStim(win,text = "LEFT key = Option 1     RIGHT key = Option 2",height = 0.04,font = "Arial", color = 'black',pos = (0,-0.4),italic = True)

            text_9 = visual.TextStim(win,text = "Your response has been recorded.",height = 0.05,font = "Arial", color = 'black',pos = (0,0))

            text_3.text = "A sure gain of %d tokens" % (n)

            text_1.draw()

            text_2.draw()

            text_3.draw()

            text_4.draw()

            text_5.draw()

            text_6.draw()

            text_7.draw()

            text_8.draw()

            text_0.draw()

            win.flip()

            core.wait(0)

            k_3 = event.waitKeys(keyList = ['left','right']) # 'q' for gurantee and 'p' for gamble



            if k_3[0] == 'left':   # < 30%

                text_1.text = "Now, which option would you select?"

                text_3.text = "A sure gain of %d tokens" % (1)

                text_4.text = ""

                text_1.draw()

                text_2.draw()

                text_3.draw()

                text_4.draw()

                text_5.draw()

                text_6.draw()

                text_7.draw()

                text_8.draw()

                text_0.draw()

                win.flip()

                core.wait(0)

                k_3 = event.waitKeys(keyList = ['left','right'])



                if k_3[0] == 'left':   # <10%

                    text_9.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','5%'+'\n')

                elif k_3[0] == 'right':   # >10%

                    text_3.text = "A sure gain of %d tokens" % (2)

                    text_1.draw()

                    text_2.draw()

                    text_3.draw()

                    text_4.draw()

                    text_5.draw()

                    text_6.draw()

                    text_7.draw()

                    text_8.draw()

                    text_0.draw()

                    win.flip()

                    core.wait(0)

                    k_3 = event.waitKeys(keyList = ['left','right'])



                    if k_3[0] == 'left':   # <20%

                        text_9.draw()

                        win.flip()

                        core.wait(2)

                        thisExp.addData('Q3_Percentage','15%'+'\n')

                    elif k_3[0] == 'right':   # >20%

                        text_9.draw()

                        win.flip()

                        core.wait(2)

                        thisExp.addData('Q3_Percentage','25%'+'\n')

            elif k_3[0] == 'right':   # >30%

                text_3.text = "A sure gain of %d tokens" % (9)

                text_1.text = "Now, which option would you select?"

                text_4.text = ""

                text_1.draw()

                text_2.draw()

                text_3.draw()

                text_4.draw()

                text_5.draw()

                text_6.draw()

                text_7.draw()

                text_8.draw()

                text_0.draw()

                win.flip()

                core.wait(0)

                k_3 = event.waitKeys(keyList = ['left','right'])



                if k_3[0] == 'left':         # <90%

                    text_3.text = "A sure gain of %d tokens" % (6)

                    text_1.draw()

                    text_2.draw()

                    text_3.draw()

                    text_4.draw()

                    text_5.draw()

                    text_6.draw()

                    text_7.draw()

                    text_8.draw()

                    text_0.draw()

                    win.flip()

                    core.wait(0)

                    k_3 = event.waitKeys(keyList = ['left','right'])



                    if k_3[0] == 'left':     # <60%

                        text_3.text = "A sure gain of %d tokens" % (4)

                        text_1.draw()

                        text_2.draw()

                        text_3.draw()

                        text_4.draw()

                        text_5.draw()

                        text_6.draw()

                        text_7.draw()

                        text_8.draw()

                        text_0.draw()

                        win.flip()

                        core.wait(0)

                        k_3 = event.waitKeys(keyList = ['left','right'])



                        if k_3[0] == 'left':   # <40%

                            text_9.draw()

                            win.flip()

                            core.wait(2)

                            thisExp.addData('Q3_Percentage','35%'+'\n')

                        elif k_3[0] == 'right':   # >40%

                            text_3.text = "A sure gain of %d tokens" % (5)

                            text_1.draw()

                            text_2.draw()

                            text_3.draw()

                            text_4.draw()

                            text_5.draw()

                            text_6.draw()

                            text_7.draw()

                            text_8.draw()

                            text_0.draw()

                            win.flip()

                            core.wait(0)

                            k_3 = event.waitKeys(keyList = ['left','right'])



                            if k_3[0] == 'left':   # <50%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','45%'+'\n')

                            elif k_3[0] == 'right':   # >50%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','55%'+'\n')

                    elif k_3[0] == 'right':   # >60%

                        text_3.text = "A sure gain of %d tokens" % (8)

                        text_1.draw()

                        text_2.draw()

                        text_3.draw()

                        text_4.draw()

                        text_5.draw()

                        text_6.draw()

                        text_7.draw()

                        text_8.draw()

                        text_0.draw()

                        win.flip()

                        core.wait(0)

                        k_3 = event.waitKeys(keyList = ['left','right'])



                        if k_3[0] == 'left':   # <80%

                            text_3.text = "A sure gain of %d tokens" % (7)

                            text_1.draw()

                            text_2.draw()

                            text_3.draw()

                            text_4.draw()

                            text_5.draw()

                            text_6.draw()

                            text_7.draw()

                            text_8.draw()

                            text_0.draw()

                            win.flip()

                            core.wait(0)

                            k_3 = event.waitKeys(keyList = ['left','right'])



                            if k_3[0] == 'left':    # <70%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','65%'+'\n')

                            elif k_3[0] == 'right':   # >70%

                                text_9.draw()

                                win.flip()

                                core.wait(2)

                                thisExp.addData('Q3_Percentage','75%'+'\n')

                        elif k_3[0] == 'right':   # >80%

                            text_9.draw()

                            win.flip()

                            core.wait(2)

                            thisExp.addData('Q3_Percentage','85%'+'\n')

                elif k_3[0] == 'right':        # >90%

                    text_9.draw()

                    win.flip()

                    core.wait(2)

                    thisExp.addData('Q3_Percentage','95%'+'\n')
  Routine StimPresInstr
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        count = -1
        q3_dataFile = open("%s.csv"%(expInfo['participant']+'_'+expInfo['date']+'_Q3data'), 'a')
        q3_dataFile.write(expInfo['participant']+','+expInfo['date']+'\n')
    ImageComponent StimPresInstr_TextImages
      image [set every frame] = $StimPres_ImageFile
      size = (1.5, 0.8)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent StimPres_Instr_Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Prac_BlockInstr
    TextComponent Prac_BlockInstr_ConsText
      color [set every repeat] = black
      font [set every repeat] = Arial
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The computer has selected new 100 face images from the database. You will see 30 out of these 100 face images in a rapid stream.

        Then, you will answer questions regarding the proportion of              faces.


        Press the SPACE key to proceed.
    TextComponent Prac_BlockInstr_ChangeText
      color [set every repeat] = $TextColor
      letterHeight = 0.05
      pos [set every repeat] = Position
      startVal [time (s)] = 0.0
      text [set every repeat] = $Instruction
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    KeyboardComponent BlockInstr_Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Prac_StimPres
    CodeComponent Prac_StimPres_Code
      Code Type = Py
      Begin Experiment:
        thisPLoop = 0
      Begin Routine:
        thisPLoop +=1
    ImageComponent Prac_StimPres_Images
      contrast = 0.2
      image [set every repeat] = $StimImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Duration
      texture resolution = 512
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  Routine BlockInstr
    TextComponent BlockInstr_ConsText
      color = black
      letterHeight = 0.05
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
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      text:
        The computer has selected new 100 face images from the database. You will see 30 out of these 100 face images in a rapid stream.

        Then, you will answer questions regarding the proportion of              faces.


        Press the SPACE key to proceed.
    TextComponent BlockInstr_ChangeText
      color [set every repeat] = $TextColor
      letterHeight = 0.05
      pos [set every repeat] = Position
      startVal [time (s)] = 0.0
      text [set every repeat] = $Instruction
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    KeyboardComponent Block_Instr_Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine StimPres
    CodeComponent StimPres_Code
      Code Type = Py
      Begin Experiment:
        thisLoop = 0
      Begin Routine:
        thisLoop +=1
    ImageComponent StimPres_Images
      contrast = 0.2
      image [set every repeat] = $StimImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Duration
      texture resolution = 512
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  Routine EndExp
    TextComponent EndExp_Text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you for your participation!
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  Routine Welc
    TextComponent Welc_Text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Welcome to the experiment!
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Flow
  Routine Welc
  LoopInitiator StimPresInstr_Reps loopType="TrialHandler"
    conditionsFile = CondFiles/StimPresInstr_TextImages.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'StimPres_ImageFile': 'InstrImages/Instr1.jpg'},
      {'StimPres_ImageFile': 'InstrImages/Instr2.jpg'},
      {'StimPres_ImageFile': 'InstrImages/Instr3.jpg'},
      {'StimPres_ImageFile': 'InstrImages/Instr4.jpg'}]
    Routine StimPresInstr
  LoopTerminator StimPresInstr_Reps
  LoopInitiator Prac_BlockInstr_Reps loopType="TrialHandler"
    conditionsFile = CondFiles/Prac_BlockInstr_even.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'BlockNo': 1, 'ForN': 1, 'Instruction': 'Fearful', 'TextColor': 'DarkRed', 'Position': [-0.14, -0.056], 'Position_Q1': [0.15, 0.235], 'Position_Q2': [0.007, 0.235]},
      {'BlockNo': 2, 'ForN': 2, 'Instruction': 'Neutral ', 'TextColor': 'blue', 'Position': [-0.13, -0.056], 'Position_Q1': [0.155, 0.235], 'Position_Q2': [0.017, 0.235]},
      {'BlockNo': None, 'ForN': None, 'Instruction': None, 'TextColor': None, 'Position': None, 'Position_Q1': None, 'Position_Q2': None},
      {'BlockNo': None, 'ForN': None, 'Instruction': None, 'TextColor': None, 'Position': None, 'Position_Q1': None, 'Position_Q2': None},
      {'BlockNo': None, 'ForN': None, 'Instruction': None, 'TextColor': None, 'Position': None, 'Position_Q1': None, 'Position_Q2': None},
      {'BlockNo': None, 'ForN': None, 'Instruction': None, 'TextColor': None, 'Position': None, 'Position_Q1': None, 'Position_Q2': None}]
    Routine Prac_BlockInstr
    Routine FixCross
    LoopInitiator Prac_StimPres_Reps loopType="TrialHandler"
      Selected rows = $str(thisPLoop)+":"+str(thisPLoop+32)
      conditionsFile = CondFiles/Prac_Trials_even.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'BlockType': 'PracF', 'TrialNo': 'Prac1', 'Stimuli': 'Mask1_FN', 'StimImageFile': 'Stim/Mask1_FN.jpg', 'StimEmo': 0, 'Duration': 0.3, 'ProbDist': 50},
        {'BlockType': 'PracF', 'TrialNo': 'Prac1', 'Stimuli': 'F05', 'StimImageFile': 'Stim/F05.jpg', 'StimEmo': 1, 'Duration': 0.1, 'ProbDist': 50},
        {'BlockType': 'PracF', 'TrialNo': 'Prac1', 'Stimuli': 'N02', 'StimImageFile': 'Stim/N02.jpg', 'StimEmo': 2, 'Duration': 0.1, 'ProbDist': 50},
        {'BlockType': 'PracF', 'TrialNo': 'Prac1', 'Stimuli': 'F01', 'StimImageFile': 'Stim/F01.jpg', 'StimEmo': 1, 'Duration': 0.1, 'ProbDist': 50},
        {'BlockType': 'PracF', 'TrialNo': 'Prac1', 'Stimuli': 'N04', 'StimImageFile': 'Stim/N04.jpg', 'StimEmo': 2, 'Duration': 0.1, 'ProbDist': 50},
        {'BlockType': 'PracF', 'TrialNo': 'Prac1', 'Stimuli': 'N04', 'StimImageFile': 'Stim/N04.jpg', 'StimEmo': 2, 'Duration': 0.1, 'ProbDist': 50},
        {'BlockType': 'PracF', 'TrialNo': 'Prac1', 'Stimuli': 'F01', 'StimImageFile': 'Stim/F01.jpg', 'StimEmo': 1, 'Duration': 0.1, 'ProbDist': 50},
        {'BlockType': 'PracF', 'TrialNo': 'Prac1', 'Stimuli': 'F04', 'StimImageFile': 'Stim/F04.jpg', 'StimEmo': 1, 'Duration': 0.1, 'ProbDist': 50},
        {'BlockType': 'PracF', 'TrialNo': 'Prac1', 'Stimuli': 'N04', 'StimImageFile': 'Stim/N04.jpg', 'StimEmo': 2, 'Duration': 0.1, 'ProbDist': 50},
        {'BlockType': 'PracF', 'TrialNo': 'Prac1', 'Stimuli': 'N02', 'StimImageFile': 'Stim/N02.jpg', 'StimEmo': 2, 'Duration': 0.1, 'ProbDist': 50}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
      Routine Prac_StimPres
    LoopTerminator Prac_StimPres_Reps
    Routine Q1
    Routine Q2
    Routine Q3
  LoopTerminator Prac_BlockInstr_Reps
  Routine ActualRunInstr
  LoopInitiator BlockInstr_Reps loopType="TrialHandler"
    conditionsFile = CondFiles\BlockInstr_even.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('BlockNo', 1), ('ForN', 1), ('Instruction', 'Fearful'), ('TextColor', 'DarkRed'), ('Position', [-0.14, -0.056]), ('Position_Q1', [0.15, 0.235]), ('Position_Q2', [0.007, 0.235])]),
      OrderedDict([('BlockNo', 1), ('ForN', 1), ('Instruction', 'Fearful'), ('TextColor', 'DarkRed'), ('Position', [-0.14, -0.056]), ('Position_Q1', [0.15, 0.235]), ('Position_Q2', [0.007, 0.235])]),
      OrderedDict([('BlockNo', 1), ('ForN', 1), ('Instruction', 'Fearful'), ('TextColor', 'DarkRed'), ('Position', [-0.14, -0.056]), ('Position_Q1', [0.15, 0.235]), ('Position_Q2', [0.007, 0.235])]),
      OrderedDict([('BlockNo', 1), ('ForN', 1), ('Instruction', 'Fearful'), ('TextColor', 'DarkRed'), ('Position', [-0.14, -0.056]), ('Position_Q1', [0.15, 0.235]), ('Position_Q2', [0.007, 0.235])]),
      OrderedDict([('BlockNo', 1), ('ForN', 1), ('Instruction', 'Fearful'), ('TextColor', 'DarkRed'), ('Position', [-0.14, -0.056]), ('Position_Q1', [0.15, 0.235]), ('Position_Q2', [0.007, 0.235])]),
      OrderedDict([('BlockNo', 2), ('ForN', 2), ('Instruction', 'Neutral '), ('TextColor', 'blue'), ('Position', [-0.13, -0.056]), ('Position_Q1', [0.155, 0.235]), ('Position_Q2', [0.017, 0.235])]),
      OrderedDict([('BlockNo', 2), ('ForN', 2), ('Instruction', 'Neutral '), ('TextColor', 'blue'), ('Position', [-0.13, -0.056]), ('Position_Q1', [0.155, 0.235]), ('Position_Q2', [0.017, 0.235])])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
    Routine BlockInstr
    Routine FixCross
    LoopInitiator StimPres_Reps loopType="TrialHandler"
      Selected rows = $str(thisLoop)+":"+str(thisLoop+32)
      conditionsFile = CondFiles\Trials_even.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('BlockNo', 1), ('BlockType', 'F'), ('TrialNo', 1), ('Stimuli', 'Mask3'), ('StimImageFile', 'Stim/Mask3.jpg'), ('StimEmo', 0), ('Duration', 0.3), ('ProbDist', 20)]),
        OrderedDict([('BlockNo', 1), ('BlockType', 'F'), ('TrialNo', 1), ('Stimuli', 'F14'), ('StimImageFile', 'Stim/F14.jpg'), ('StimEmo', 1), ('Duration', 0.1), ('ProbDist', 20)]),
        OrderedDict([('BlockNo', 1), ('BlockType', 'F'), ('TrialNo', 1), ('Stimuli', 'N08'), ('StimImageFile', 'Stim/N08.jpg'), ('StimEmo', 2), ('Duration', 0.1), ('ProbDist', 20)]),
        OrderedDict([('BlockNo', 1), ('BlockType', 'F'), ('TrialNo', 1), ('Stimuli', 'N05'), ('StimImageFile', 'Stim/N05.jpg'), ('StimEmo', 2), ('Duration', 0.1), ('ProbDist', 20)]),
        OrderedDict([('BlockNo', 1), ('BlockType', 'F'), ('TrialNo', 1), ('Stimuli', 'N14'), ('StimImageFile', 'Stim/N14.jpg'), ('StimEmo', 2), ('Duration', 0.1), ('ProbDist', 20)]),
        OrderedDict([('BlockNo', 1), ('BlockType', 'F'), ('TrialNo', 1), ('Stimuli', 'F07'), ('StimImageFile', 'Stim/F07.jpg'), ('StimEmo', 1), ('Duration', 0.1), ('ProbDist', 20)]),
        OrderedDict([('BlockNo', 1), ('BlockType', 'F'), ('TrialNo', 1), ('Stimuli', 'N09'), ('StimImageFile', 'Stim/N09.jpg'), ('StimEmo', 2), ('Duration', 0.1), ('ProbDist', 20)]),
        OrderedDict([('BlockNo', 1), ('BlockType', 'F'), ('TrialNo', 1), ('Stimuli', 'N07'), ('StimImageFile', 'Stim/N07.jpg'), ('StimEmo', 2), ('Duration', 0.1), ('ProbDist', 20)])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
      Routine StimPres
    LoopTerminator StimPres_Reps
    Routine Q1
    Routine Q2
    Routine Q3
  LoopTerminator BlockInstr_Reps
  Routine EndExp
